# Generated by Configurator on Mon Apr 29 17:41:10 CEST 2024

# Reset
Property,Core,Initialize,0


# PixelSize settings
# Resolution preset: Res20x
ConfigPixelSize,Res20x,Objective,Label,Mitutoyo 20x Plan Apo L
PixelSize_um,Res20x,1.2

# Resolution preset: Res40x
ConfigPixelSize,Res40x,Objective,Label,Nikon 40X Plan Fluor ELWD
PixelSize_um,Res40x,0.25


# Devices
Device,pco_camera,PCO_Camera,pco_camera

# Pre-init settings for devices
Property,pco_camera,DemoMode,Off

# Pre-init settings for COM ports

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,pco_camera
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup


